[[model]]
name: ohara-cipa-2017
display_name: O'Hara-CiPA-v1, 2017
version: 20220201
mmt_authors: Michael Clerx
revised: Jaekyung Song
desc: """
    - All ion concentration were fixed.
    The 2017 "CiPA v1" update [1] of the O'Hara et al. model of the human
    ventricular AP [2].

    This Myokit implementation was based on CellML code [3], published by Chang
    et al. [4]. The authors checked the CellML output (after converting to
    Chaste using PyCML) against derivatives calculated with the original code
    published by the FDA [5].

    The model differs from the original O'Hara model [2] in the following
    aspects:
     - The IKr formulation was replaced entirely, as described in [1,4].
     - Conductances for INaL, ICaL, IKs, and IK1 were rescaled, as described
       in [6].

    References:

    [1] Li, Dutta et al., Colatsky (2017) Improving the In Silico Assessment o
        Proarrhythmia Risk by Combining hERG (Human Ether-a-go-go-Related Gene)
        Channel?Drug Binding Kinetics and Multichannel Pharmacology.
        Circulation: Arrhythmia and Electrophysiology.
        doi: 10.1161/CIRCEP.116.004628

    [2] O'Hara, Virag, Varro, Rudy (2011) Simulation of the Undiseased Human
        Cardiac Ventricular Action Potential: Model Formulation and
        Experimental Validation. PLoS Computational Biology
        doi: 10.1371/journal.pcbi.1002061

    [3] https://models.cellml.org/e/4e8/ohara_rudy_cipa_v1_2017.cellml/view

    [4] Chang, Dutta et al., Li (2017) Uncertainty Quantification Reveals the
        Importance of Data Variability and Experimental Design Considerations
        for in Silico Proarrhythmia Risk Assessment. Frontiers in Physiology.
        doi: 10.3389/fphys.2017.00917

    [5] https://github.com/FDA/CiPA/blob/master/AP_simulation/models/newordherg_qNet.c

    [6] Dutta, Chang et al. Li (2017) Optimization of an In silico Cardiac Cell
        Model for Proarrhythmia Risk Assessment. Frontiers in Physiology.
        doi: 10.3389/fphys.2017.00616

"""
# Initial values
membrane.V        = -8.80019046500000002e1
sodium.Na_i       =  7.26800449799999981
sodium.Na_ss      =  7.26808997699999981
potassium.K_i     =  1.44655591799999996e2
potassium.K_ss    =  1.44655565099999990e2
calcium.Ca_i      =  8.6e-5
calcium.Ca_ss     =  8.49e-5
calcium.Ca_nsr    =  1.61957453799999995
calcium.Ca_jsr    =  1.57123401400000007
ina.m             =  7.34412110199999992e-3
ina.hf            =  6.98107191299999985e-1
ina.hs            =  6.98089580099999996e-1
ina.j             =  6.97990843200000044e-1
ina.hsp           =  4.54948552499999992e-1
ina.jp            =  6.97924586499999999e-1
inal.m            =  1.88261727299999989e-4
inal.h            =  5.00854885500000013e-1
inal.hp           =  2.69306535700000016e-1
ito.a             =  1.00109768699999991e-3
ito.if            =  9.99554174499999948e-1
ito.is            =  5.86506173600000014e-1
ito.ap            =  5.10086293400000023e-4
ito.ifp           =  9.99554182300000038e-1
ito.isp           =  6.39339948199999952e-1
ical.d            =  2.34e-9
ical.ff           =  9.99999990900000024e-1
ical.fs           =  9.10241277699999962e-1
ical.fcaf         =  9.99999990900000024e-1
ical.fcas         =  9.99804677700000033e-1
ical.jca          =  9.99973831200000052e-1
ical.nca          =  2.74941404400000020e-3
ical.ffp          =  9.99999990900000024e-1
ical.fcafp        =  9.99999990900000024e-1
ikr.IC1           =  0.999637
ikr.IC2           =  6.83207999999999982e-5
ikr.C1            =  1.80144999999999990e-8
ikr.C2            =  8.26618999999999954e-5
ikr.O             =  1.55510000000000007e-4
ikr.IO            =  5.67622999999999969e-5
ikr.IObound       =  0
ikr.Obound        =  0
ikr.Cbound        =  0
ikr.D             =  0
iks.x1            =  2.70775802499999996e-1
iks.x2            =  1.92850342599999990e-4
ik1.x             =  9.96759759399999945e-1
ryr.Jrelnp        =  2.5e-7
ryr.Jrelp         =  3.12e-7
camk.CaMK_trapped =  1.25840446999999998e-2

#
# Simulator variables
#
[engine]
time = 0 [ms]
    in [ms]
    bind time
pace = 0 bind pace

#
# Simulator setting
#
[setting]
simType = 0   # AP=0 | VC=1


#
# Membrane potential
# Page 5 of the appendix to [2]
#
[membrane]
VC = engine.pace
    desc: membane potential
    in [mV]
i_ion = (
        + sodium.INa_tot
        + sodium.INa_ss_tot
        + calcium.ICa_tot
        + calcium.ICa_ss_tot
        + potassium.IK_tot
        + potassium.IK_ss_tot
        )
    label cellular_current
    in [A/F]
dot(V) = -(i_ion + stimulus.i_stim)
    label membrane_potential
    in [mV]



#
# Stimulus current
# Page 5 of the appendix to [2]
#
[stimulus]
amplitude = if(setting.simType==0, -80.0, 0.0)
    in [A/F]
i_stim = engine.pace * amplitude
    in [A/F]


#
# Cell geometry
# Page 6 of the appendix to [2]
#
[cell]
mode = 0
    desc: The type of cell. Endo = 0, Epi = 1, Mid = 2
L = 0.01 [cm] : Cell length
    in [cm]
r = 0.0011 [cm] : Cell radius
    in [cm]
vcell = 1000 [uL/mL] * 3.14 * r * r * L
    in [uL]
    desc: Cell volume
Ageo = 2 * 3.14 * r * r + 2 * 3.14 * r * L
    in [cm^2]
    desc: Geometric cell area
Acap = 2 * Ageo
    in [cm^2]
    desc: Capacitative membrane area
AFC = Acap / phys.F * 1 [uF/cm^2]
    in [uF*mol/C]
vmyo = 0.68 * vcell
    in [uL]
    desc: Volume of the cytosolic compartment
vnsr = 0.0552 * vcell
    in [uL]
    desc: Volume of the NSR compartment
vjsr = 0.0048 * vcell
    in [uL]
    desc: Volume of the JSR compartment
vss = 0.02 * vcell
    in [uL]
    desc: Volume of the Submembrane space near the T-tubules

#
# Physical constants
# Page 2 of the appendix to [2]
#
[phys]
R = 8314 [J/kmol/K] : Gas constant
    in [J/kmol/K]
T = 310 [K] : Temperature
    in [K]
F = 96485 [C/mol] : Faraday constant
    in [C/mol]
RTF = R * T / F
    in [mV]
FRT = F / (R * T)
    in [1/mV]
FFRT = F * FRT
    in [C/mol/mV]

#
# Extracellular concentrations
# Page 5 of the appendix to [2]
#
[extra]
Na_o = 140 [mM] : Extracellular Na+ concentration
    in [mM]
Ca_o = 1.8 [mM] : Extracellular Ca2+ concentration
    in [mM]
K_o = 5.4 [mM] : Extracellular K+ concentration
    in [mM]

#
# Reversal potentials
# Page 6 of the appendix to [2]
#
[rev]
ENa = phys.RTF * log(extra.Na_o / sodium.Na_i)
    in [mV]
    desc: Reversal potential for Sodium currents
EK = phys.RTF * log(extra.K_o / potassium.K_i)
    in [mV]
    desc: Reversal potential for Potassium currents
PNaK = 0.01833
    desc: Permeability ratio K+ to Na+
EKs = phys.RTF * log((extra.K_o + PNaK * extra.Na_o) / (potassium.K_i + PNaK * sodium.Na_i))
    desc: Reversal potential for IKs
    in [mV]

#
# INa: Fast sodium current
# Page 6 of the appendix to [2]
#
# The fast sodium current is modelled using a Hodgkin-Huxley type formulation
# including activation (m), slow and fast components of inactivation (h) and
# recovery from inactivation (j). The slow component of inactivation and
# recovery from inactivation have an alternative formulation for CaMKII-
# phosphorylated channels.
#
[ina]
V = if(setting.simType==0, membrane.V, membrane.VC)
# m-gates
sm = 1 / (1 + exp((V + 39.57 [mV]) / -9.871 [mV]))
    desc: Steady state value for m-gates
tm = 1 [ms] / (6.765 * exp((V + 11.64 [mV]) / 34.77 [mV]) + 8.552 * exp(-(V + 77.42 [mV]) / 5.955 [mV]))
    desc: Time constant for m-gates
    in [ms]
dot(m) = (sm - m) / tm
    desc: Activation gate for INa
# h-gates
sh = 1 / (1 + exp((V + 82.9 [mV]) / 6.086 [mV]))
    desc: Steady-state value for h-gates
thf = 1 [ms] / (1.432e-5 * exp((V + 1.196 [mV]) / -6.285 [mV]) + 6.149 * exp((V + 0.5096 [mV]) / 20.27 [mV]))
    desc: Time constant for fast development of inactivation in INa
    in [ms]
ths = 1 [ms] / (0.009794 * exp((V + 17.95 [mV]) / -28.05 [mV]) + 0.3343 * exp((V + 5.73 [mV]) / 56.66 [mV]))
    desc: Time constant for slow development of inactivation in INa
    in [ms]
Ahf = 0.99 : Fraction of INa channels with fast inactivation
Ahs = 1 - Ahf : Fraction of INa channels with slow inactivation
dot(hf) = (sh - hf) / thf
    desc: Fast component of inactivation for INa
dot(hs) = (sh - hs) / ths
    desc: Slow component of inactivation for non-phosphorylated INa
h = Ahf * hf + Ahs * hs
    desc: Inactivation gate for INa
# j-gates
sj = sh
    desc: Steady-state value for j-gate in INa
tj = 2.038 [ms] + 1 [ms] / (0.02136 * exp((V + 100.6 [mV]) / -8.281 [mV]) + 0.3052 * exp((V + 0.9941 [mV]) / 38.45 [mV]))
    desc: Time constant for j-gate in INa
    in [ms]
dot(j) = (sj - j) / tj
    desc: Recovery from inactivation gate for non-phosphorylated INa
# Phosphorylated channels
thsp = 3 * ths
    desc: Time constant for h-gate of phosphorylated INa
    in [ms]
shsp = 1 / (1 + exp((V + 89.1 [mV]) / 6.086 [mV]))
    desc: Steady-state value for h-gate of phosphorylated INa
dot(hsp) = (shsp - hsp) / thsp
    desc: Slow componennt of the inactivation gate for phosphorylated INa
hp = Ahf * hf + Ahs * hsp
    desc: Inactivation gate for phosphorylated INa
tjp = 1.46 * tj
    desc: Time constant for the j-gate of phosphorylated INa
    in [ms]
dot(jp) = (sj - jp) / tjp
    desc: Recovery from inactivation gate for phosphorylated INa
# Current
GNafc = 1.0
GNa = 75
    in [mS/uF]
    desc: [mS/uF] : Maximum conductance of INa
INa = (GNa/GNafc) * (V - rev.ENa) * m^3 * ((1 - camk.f) * h * j + camk.f * hp * jp)
    in [A/F]
    desc: Fast sodium current

#
# INaL: Late component of the sodium current
# Page 7 of the appendix to [2]
#
[inal]
use ina.tm
V = if(setting.simType==0, membrane.V, membrane.VC)
sm = 1 / (1 + exp((V + 42.85 [mV]) / -5.264 [mV]))
    desc: Steady state value of m-gate for INaL
dot(m) = (sm - m) / tm
    desc: Activation gate for INaL
th = 200 [ms] : Time constant for inactivation of non-phosphorylated INaL
    in [ms]
sh = 1 / (1 + exp((V + 87.61 [mV]) / 7.488 [mV]))
    desc: Steady-state value for inactivation of non-phosphorylated INaL
dot(h) = (sh - h) / th
    desc: Inactivation gate for non-phosphorylated INaL
thp = 3 * th
    in [ms]
    desc: Time constant for inactivation of phosphorylated INaL
shp = 1 / (1 + exp((V + 93.81 [mV]) / 7.488 [mV]))
    desc: Steady state value for inactivation of phosphorylated INaL
dot(hp) = (shp - hp) / thp
    desc: Inactivation gate for phosphorylated INaL
# Current
GNaLfc = 1.0
GNaL = 0.0075 * 2.661 [mS/uF] : Maximum conductance of INaL
    in [mS/uF]
fNaL = if(cell.mode == 1, 0.6, 1) 
    desc: Adjustment for different cell types
INaL = fNaL * (GNaL/GNaLfc) * (V - rev.ENa) * m * ((1 - camk.f) * h + camk.f * hp)
    in [A/F]

#
# Ito: Transient outward potassium current
# page 8 of the appendix to [2]
#
[ito]
V = if(setting.simType==0, membrane.V, membrane.VC)
ta = 1.0515 [ms] / (one + two)
    one = 1 / (1.2089 * (1 + exp((V - 18.4099 [mV]) / -29.3814 [mV])))
    two = 3.5 / (1 + exp((V + 100 [mV]) / 29.3814 [mV]))
    desc: Time constant for Ito activation
    in [ms]
sa = 1 / (1 + exp((V - 14.34 [mV]) / -14.82 [mV]))
    desc: Steady-state value for Ito activation
dot(a) = (sa - a) / ta
    desc: Ito activation gate
si = 1 / (1 + exp((V + 43.94 [mV]) / 5.711 [mV]))
    desc: Steady-state value for Ito inactivation
delta_epi = if(cell.mode == 1, 1 - 0.95 / (1 + exp((V + 70 [mV]) / 5 [mV])), 1)
    desc: Adjustment for different cell types
tif = (4.562 [ms] + 1 [ms] / (0.3933 * exp((V + 100 [mV]) / -100 [mV]) + 0.08004 * exp((V + 50 [mV]) / 16.59 [mV]))) * delta_epi
    desc: Time constant for fast component of Ito inactivation
    in [ms]
tis = (23.62 [ms] + 1 [ms] / (0.001416 * exp((V + 96.52 [mV]) / -59.05 [mV]) + 1.78e-8 * exp((V + 114.1 [mV]) / 8.079 [mV]))) * delta_epi
    desc: Time constant for slow component of Ito inactivation
    in [ms]
dot(if) = (si - if) / tif
    desc: Fast component of Ito activation
dot(is) = (si - is) / tis
    desc: Slow component of Ito activation
Aif = 1 / (1 + exp((V - 213.6 [mV]) / 151.2 [mV]))
    desc: Fraction of fast inactivating Ito
Ais = 1 - Aif
    desc: Fraction of slow inactivating Ito
i = Aif * if + Ais * is
    desc: Inactivation gate for non-phosphorylated Ito
dot(ap) = (sap - ap) / ta
    sap = 1 / (1 + exp((V - 24.34 [mV]) / -14.82 [mV]))
dti_develop = 1.354 + 1e-4 / (exp((V - 167.4 [mV]) / 15.89 [mV]) + exp((V - 12.23 [mV]) / -0.2154 [mV]))
dti_recover = 1 - 0.5 / (1 + exp((V + 70 [mV]) / 20 [mV]))
tifp = dti_develop * dti_recover * tif
    desc: Time constant for fast component of inactivation of phosphorylated Ito
    in [ms]
tisp = dti_develop * dti_recover * tis
    desc: Time constant for slot component of inactivation of phosphorylated Ito
    in [ms]
dot(ifp) = (si - ifp) / tifp
    desc: Fast component of inactivation of phosphorylated Ito
dot(isp) = (si - isp) / tisp
    desc: Slow component of inactivation of phosphorylated Ito
ip = Aif * ifp + Ais * isp
    desc: Inactivation gate for phosphorylated Ito
# Current
Gtofc = 1.0
Gto = 0.02
    in [mS/uF]
    desc: Maximum conductance of Ito
fto = if(cell.mode == 0, 1, 4)
Ito = fto * (Gto/Gtofc) * (V - rev.EK) * ((1 - camk.f) * a * i + camk.f * ap * ip)
    desc: Transient outward Potassium current
    in [A/F]

#
# ICaL: L-type calcium current
# ICaNa: Sodium current through the L-type calcium channel
# ICaK: Potassium current through the L-type calcium channel
# Page 9 of the appendix to [2]
#
# The ICaL channel is modeled using activation, inactivation (fast and slow),
# Ca-dependent inactivation (fast and slow) and recovery from Ca-dependent
# inactivation.
# Inactivation and Ca-dependent inactivation have an alternative formulation
# for CaMKII phosphorylated channels.
#
[ical]
V = if(setting.simType==0, membrane.V, membrane.VC)
use extra.Ca_o, extra.K_o, extra.Na_o
use calcium.Ca_ss, potassium.K_ss, sodium.Na_ss
vfrt = V * phys.FRT
vffrt = V * phys.FFRT
    in [C/mol]
# Activation
sd = 1 / (1 + exp((V + 3.94 [mV]) / -4.23 [mV]))
    desc: Steady-state value for activation gate of ICaL
td = 0.6 [ms] + 1 [ms] / (exp(-0.05 [1/mV] * (V + 6 [mV])) + exp(0.09 [1/mV] * (V + 14 [mV])))
    desc: Time constant for activation gate of ICaL
    in [ms]
dot(d) = (sd - d) / td
    desc: Activation gate of ICaL channel
# Inactivation
sf = 1 / (1 + exp((V + 19.58 [mV]) / 3.696 [mV]))
    desc: Steady-state value for inactivation gate of ICaL
tff = 7 [ms] + 1 [ms] / (0.0045 * exp((V + 20 [mV]) / -10 [mV]) + 0.0045 * exp((V + 20 [mV]) / 10 [mV]))
    desc: Time constant for fast inactivation of ICaL
    in [ms]
tfs = 1000 [ms] + 1 [ms] / (3.5e-5 * exp((V + 5 [mV]) / -4 [mV]) + 3.5e-5 * exp((V + 5 [mV]) / 6 [mV]))
    desc: Time constant for fast inactivation of ICaL
    in [ms]
dot(ff) = (sf - ff) / tff
    desc: Fast inactivation of ICaL
dot(fs) = (sf - fs) / tfs
    desc: Slow inactivation of ICaL
Aff = 0.6 : Fraction of ICaL channels with fast inactivation
Afs = 1 - Aff : Fraction of ICaL channels with slow inactivation
f = Aff * ff + Afs * fs
    desc: Inactivation of ICaL
# Ca-dependent inactivation
sfca = sf
    desc: Steady-state value for Ca-dependent inactivation of ICaL
tfcaf = 7 [ms] + 1 [ms] / (0.04 * exp((V - 4 [mV]) / -7 [mV]) + 0.04 * exp((V - 4 [mV]) / 7 [mV]))
    desc: Time constant for fast Ca-dependent inactivation of ICaL
    in [ms]
tfcas = 100 [ms] + 1 [ms] / (0.00012 * exp(V / -3 [mV]) + 0.00012 * exp(V / 7 [mV]))
    desc: Time constant for slow Ca-dependent inactivation of ICaL
    in [ms]
dot(fcaf) = (sfca - fcaf) / tfcaf
    desc: Fast Ca-dependent inactivation of ICaL
dot(fcas) = (sfca - fcas) / tfcas
    desc: Slow Ca-dependent inactivation of ICaL
Afcaf = 0.3 + 0.6 / (1 + exp((V - 10 [mV]) / 10 [mV]))
    desc: Fraction of ICaL channels with fast Ca-dependent inactivation
Afcas = 1 - Afcaf
    desc: Fraction of ICaL channels with slow Ca-dependent inactivation
fca = Afcaf * fcaf + Afcas * fcas
    desc: Ca-dependent inactivation of ICaL
# Recovery from Ca-dependent inactivation
tjca = 75 [ms] : Time constant of recovery from Ca-dependent inactivation
    in [ms]
dot(jca) = (sfca - jca) / tjca
    desc: Recovery from Ca-dependent inactivation
# Inactivation of phosphorylated ICaL
tffp = 2.5 * tff
    in [ms]
    desc: Time constant for fast inactivation of phosphorylated ICaL
dot(ffp) = (sf - ffp) / tffp
    desc: Fast inactivation of phosphorylated ICaL
fp = Aff * ffp + Afs * fs
    desc: Inactivation of phosphorylated ICaL
# Ca-dependent inactivation of phosphorylated ICaL
tfcafp = 2.5 * tfcaf
    in [ms]
    desc: Time constant for fast Ca-dependent inactivation of phosphorylated ICaL
dot(fcafp) = (sfca - fcafp) / tfcafp
    desc: Fast Ca-dependent inactivation of phosphorylated ICaL
fcap = Afcaf * fcafp + Afcas * fcas
    desc: Ca-dependent inactivation of phosphorylated ICaL
# Fraction of channels in Ca-dependent inactivation mode
dot(nca) = anca * k2n - nca * km2n
    desc: Fraction of channels in Ca-depdent inactivation mode
    Kmn = 0.002 [mM]
        in [mM]
    k2n = 1000 [1/ms]
        in [1/ms]
    km2n = jca * 1 [1/ms]
        in [1/ms]
    anca = 1 / (k2n / km2n + (1 + Kmn / Ca_ss)^4)
# Total currents through L-type calcium channels
v0 = 0
B_1 = 2.0 * phys.FRT
A_1 = ( 4.0 * phys.FFRT * (calcium.Ca_ss * exp(2 * vfrt) - 0.341 * extra.Ca_o) ) / B_1
U_1 = B_1 * (V-v0)
PhiCaL = if(-1e-7<=U_1 and U_1<=1e-7, A_1 * (1.0-0.5*U_1), (A_1*U_1)/(exp(U_1)-1.0)) 
B_2 = phys.FRT
A_2 = ( 0.75 * phys.FFRT * (sodium.Na_ss * exp(vfrt) - extra.Na_o) ) / B_2
U_2 = B_2 * (V-v0)
PhiCaNa = if(-1e-7<=U_2 and U_2<=1e-7, A_2 * (1.0-0.5*U_2), (A_2*U_2)/(exp(U_2)-1.0)) 
B_3 = phys.FRT
A_3 = ( 0.75 * phys.FFRT * (potassium.K_ss * exp(vfrt) - extra.K_o) ) / B_3
U_3 = B_3 * (V-v0)
PhiCaK = if(-1e-7<=U_3 and U_3<=1e-7, A_3 * (1.0-0.5*U_3), (A_3*U_3)/(exp(U_3)-1.0)) 
PCafc = 1.0
PCa = 0.0001 * 1.007 [L/ms/F]
    in [L/ms/F]
fPCa = piecewise(cell.mode == 0, 1, cell.mode == 1, 1.2, 2.5) 
final_PCa = fPCa * (PCa/PCafc)
    in [L/ms/F]
PCap = 1.1 * final_PCa
    in [L/ms/F]
PCaNa = 0.00125 * final_PCa
    in [L/ms/F]
PCaK = 3.574e-4 * final_PCa
    in [L/ms/F]
PCaNap = 0.00125 * PCap
    in [L/ms/F]
PCaKp = 3.574e-4 * PCap
    in [L/ms/F]
g = d * (f  * (1 - nca) + jca * fca  * nca)
    desc: Conductivity of non-phosphorylated ICaL
gp = d * (fp * (1 - nca) + jca * fcap * nca)
    desc: Conductivity of phosphorylated ICaL
ICaL = (1 - camk.f) * final_PCa * PhiCaL * g + camk.f * PCap * PhiCaL * gp
    in [A/F]
    desc: Ca-component of L-type calcium current
ICaNa = (1 - camk.f) * PCaNa * PhiCaNa * g + camk.f * PCaNap * PhiCaNa * gp
    in [A/F]
    desc: Na-component of L-type calcium current
ICaK = (1 - camk.f) * PCaK * PhiCaK * g + camk.f * PCaKp * PhiCaK * gp
    in [A/F]
    desc: K-component of L-type calcium current
ICaL_total = ICaL + ICaK + ICaNa
    in [A/F]

#
# IKr: Rapid delayed rectifier potassium current
# Described in [1,4].
#
[ikr]
V = if(setting.simType==0, membrane.V, membrane.VC)
A1 = 0.0264 [mS/uF]
    in [mS/uF]
A11 = 0.0007868 [mS/uF]
    in [mS/uF]
A2 = 4.986e-6 [mS/uF]
    in [mS/uF]
A21 = 5.455e-6 [mS/uF]
    in [mS/uF]
A3 = 0.001214 [mS/uF]
    in [mS/uF]
A31 = 0.005509 [mS/uF]
    in [mS/uF]
A4 = 1.854e-5 [mS/uF]
    in [mS/uF]
A41 = 0.001416 [mS/uF]
    in [mS/uF]
A51 = 0.4492 [mS/uF]
    in [mS/uF]
A52 = 0.3181 [mS/uF]
    in [mS/uF]
A53 = 0.149 [mS/uF]
    in [mS/uF]
A61 = 0.01241 [mS/uF]
    in [mS/uF]
A62 = 0.3226 [mS/uF]
    in [mS/uF]
A63 = 0.008978 [mS/uF]
    in [mS/uF]
B1 = 4.631e-5 [1/mV]
    in [1/mV]
B11 = 1.535e-8 [1/mV]
    in [1/mV]
B2 = -0.004226 [1/mV]
    in [1/mV]
B21 = -0.1688 [1/mV]
    in [1/mV]
B3 = 0.008516 [1/mV]
    in [1/mV]
B31 = 7.771e-9 [1/mV]
    in [1/mV]
B4 = -0.04641 [1/mV]
    in [1/mV]
B41 = -0.02877 [1/mV]
    in [1/mV]
B51 = 0.008595 [1/mV]
    in [1/mV]
B52 = 3.613e-8 [1/mV]
    in [1/mV]
B53 = 0.004668 [1/mV]
    in [1/mV]
B61 = 0.1725 [1/mV]
    in [1/mV]
B62 = -6.57499999999999990e-4 [1/mV]
    in [1/mV]
B63 = -0.02215 [1/mV]
    in [1/mV]
q1 = 4.843
q11 = 4.942
q2 = 4.23
q21 = 4.156
q3 = 4.962
q31 = 4.22
q4 = 3.769
q41 = 1.459
q51 = 5
q52 = 4.663
q53 = 2.412
q61 = 5.568
q62 = 5
q63 = 5.682
Kt = 3.5e-5 [mS/uF]
    in [mS/uF]
Ku = 0 [mS/uF]
    in [mS/uF]
Temp = 37
Vhalf = 1 [mV]
    in [mV]
halfmax = 1
n = 1
Kmax = 0
D_adj = if(-1e-11<D and D<1e-11, 1e-11, D)
dot(IC1) = -(A11 * exp(B11 * V) * IC1 * exp((Temp - 20) * log(q11) / 10) - A21 * exp(B21 * V) * IC2 * exp((Temp - 20) * log(q21) / 10)) + A51 * exp(B51 * V) * C1 * exp((Temp - 20) * log(q51) / 10) - A61 * exp(B61 * V) * IC1 * exp((Temp - 20) * log(q61) / 10)
dot(IC2) = A11 * exp(B11 * V) * IC1 * exp((Temp - 20) * log(q11) / 10) - A21 * exp(B21 * V) * IC2 * exp((Temp - 20) * log(q21) / 10) - (A3 * exp(B3 * V) * IC2 * exp((Temp - 20) * log(q3) / 10) - A4 * exp(B4 * V) * IO * exp((Temp - 20) * log(q4) / 10)) + A52 * exp(B52 * V) * C2 * exp((Temp - 20) * log(q52) / 10) - A62 * exp(B62 * V) * IC2 * exp((Temp - 20) * log(q62) / 10)
dot(C1) = -(A1 * exp(B1 * V) * C1 * exp((Temp - 20) * log(q1) / 10) - A2 * exp(B2 * V) * C2 * exp((Temp - 20) * log(q2) / 10)) - (A51 * exp(B51 * V) * C1 * exp((Temp - 20) * log(q51) / 10) - A61 * exp(B61 * V) * IC1 * exp((Temp - 20) * log(q61) / 10))
dot(C2) = A1 * exp(B1 * V) * C1 * exp((Temp - 20) * log(q1) / 10) - A2 * exp(B2 * V) * C2 * exp((Temp - 20) * log(q2) / 10) - (A31 * exp(B31 * V) * C2 * exp((Temp - 20) * log(q31) / 10) - A41 * exp(B41 * V) * O * exp((Temp - 20) * log(q41) / 10)) - (A52 * exp(B52 * V) * C2 * exp((Temp - 20) * log(q52) / 10) - A62 * exp(B62 * V) * IC2 * exp((Temp - 20) * log(q62) / 10))
dot(O) = A31 * exp(B31 * V) * C2 * exp((Temp - 20) * log(q31) / 10) - A41 * exp(B41 * V) * O * exp((Temp - 20) * log(q41) / 10) - (A53 * exp(B53 * V) * O * exp((Temp - 20) * log(q53) / 10) - A63 * exp(B63 * V) * IO * exp((Temp - 20) * log(q63) / 10)) - (Kmax * Ku * exp(n * log(D_adj)) / (exp(n * log(D_adj)) + halfmax) * O - Ku * Obound)
dot(IO) = A3 * exp(B3 * V) * IC2 * exp((Temp - 20) * log(q3) / 10) - A4 * exp(B4 * V) * IO * exp((Temp - 20) * log(q4) / 10) + A53 * exp(B53 * V) * O * exp((Temp - 20) * log(q53) / 10) - A63 * exp(B63 * V) * IO * exp((Temp - 20) * log(q63) / 10) - (Kmax * Ku * exp(n * log(D_adj)) / (exp(n * log(D_adj)) + halfmax) * IO - Ku * A53 * exp(B53 * V) * exp((Temp - 20) * log(q53) / 10) / (A63 * exp(B63 * V) * exp((Temp - 20) * log(q63) / 10)) * IObound)
dot(IObound) = Kmax * Ku * exp(n * log(D_adj)) / (exp(n * log(D_adj)) + halfmax) * IO - Ku * A53 * exp(B53 * V) * exp((Temp - 20) * log(q53) / 10) / (A63 * exp(B63 * V) * exp((Temp - 20) * log(q63) / 10)) * IObound + Kt / (1 + exp(-(V - Vhalf) / 6.789 [mV])) * Cbound - Kt * IObound
dot(Obound) = Kmax * Ku * exp(n * log(D_adj)) / (exp(n * log(D_adj)) + halfmax) * O - Ku * Obound + Kt / (1 + exp(-(V - Vhalf) / 6.789 [mV])) * Cbound - Kt * Obound
dot(Cbound) = -(Kt / (1 + exp(-(V - Vhalf) / 6.789 [mV])) * Cbound - Kt * Obound) - (Kt / (1 + exp(-(V - Vhalf) / 6.789 [mV])) * Cbound - Kt * IObound)
dot(D) = 0 [1/ms]
GKrfc = 1.0
GKr = 0.046 * 1.114 / 1.1
    in [mS/uF]
fKr = piecewise(cell.mode == 0, 1, cell.mode == 1, 1.3, 0.8)
IKr = fKr * (GKr/GKrfc) * sqrt(extra.K_o / 5.4 [mM]) * O * (V - rev.EK)
    in [A/F]

#
# IKs: Slow delayed rectifier potassium current
# Page 11 of the appendix to [2]
#
# Modelled with two activation gates
#
[iks]
V = if(setting.simType==0, membrane.V, membrane.VC)
sx = 1 / (1 + exp((V + 11.6 [mV]) / -8.932 [mV]))
    desc: Steady-state value for activation of IKs
dot(x1) = (sx - x1) / tau
    desc: Slow, low voltage IKs activation
    tau = 817.3 [ms] + 1 [ms] / (2.326e-4 * exp((V + 48.28 [mV]) / 17.8 [mV]) + 0.001292 * exp((V + 210 [mV]) / -230 [mV]))
        desc: Time constant for slow, low voltage IKs activation
        in [ms]
dot(x2) = (sx - x2) / tau
    desc: Fast, high voltage IKs activation
    tau = 1 [ms] / (0.01 * exp((V - 50 [mV]) / 20 [mV]) + 0.0193 * exp((V + 66.54 [mV]) / -31 [mV]))
        desc: Time constant for fast, high voltage IKs activation
        in [ms]
KsCa = 1 + 0.6 / (1 + (3.8e-5 [mM] / calcium.Ca_i)^1.4)
GKsfc = 1.0
GKs = 0.0034 * 1.87 [mS/uF]
    in [mS/uF]
fKs = if(cell.mode == 1, 1.4, 1) 
IKs = fKs * (GKs/GKsfc) * KsCa * x1 * x2 * (V - rev.EKs)
    desc: Slow delayed rectifier Potassium current
    in [A/F]

#
# IK1: Inward rectifier potassium current
# Page 12 of the appendix to [2]
#
# Modelled with an activation channel and an instantaneous inactivation channel
#
[ik1]
use extra.K_o
V = if(setting.simType==0, membrane.V, membrane.VC)
dot(x) = (inf - x) / tau
    desc: Activation of IK1
    inf = 1 / (1 + exp(-(V + 2.5538 [mV/mM] * K_o + 144.59 [mV]) / (1.5692 [mV/mM] * K_o + 3.8115 [mV])))
        desc: Steady-state value for activation of IK1
    tau = 122.2 [ms] / (exp((V + 127.2 [mV]) / -20.36 [mV]) + exp((V + 236.8 [mV]) / 69.33 [mV]))
        desc: Time constant for activation of IK1
        in [ms]
r = 1 / (1 + exp((V + 105.8 [mV] - 2.6 [mV/mM] * K_o) / 9.493 [mV]))
    desc: Inactivation of IK1
GK1fc = 1.0
GK1 = 0.1908 * 1.698 [mS/uF]
    in [mS/uF]
    desc: Maximum conductance for IK1 (before scaling)
fK1 = piecewise(cell.mode == 0, 1, cell.mode == 1, 1.2, 1.3) 
IK1 = fK1 * (GK1/GK1fc) * sqrt(K_o / 1 [mM]) * r * x * (V - rev.EK)
    desc: Inward rectifier Potassium current
    in [A/F]

#
# INaCa: Sodium/calcium exchange current
# page 12 of the appendix to [2]
#
[inaca]
V = if(setting.simType==0, membrane.V, membrane.VC)
use extra.Na_o, extra.Ca_o
use sodium.Na_i, calcium.Ca_i
kna1 = 15 [mM]
    in [mM]
kna2 = 5 [mM]
    in [mM]
kna3 = 88.12 [mM]
    in [mM]
kasymm = 12.5
wna = 6e4 [Hz]
    in [Hz]
wca = 6e4 [Hz]
    in [Hz]
wnaca = 5e3 [Hz]
    in [Hz]
kcaon = 1.5e6 [mM/ms]
    in [mM/ms]
kcaoff = 5e3 [mM/ms]
    in [mM/ms]
qna = 0.5224
qca = 0.167
hca = exp(qca * V * phys.FRT)
hna = exp(qna * V * phys.FRT)
# Parameters h
h1 = 1 + Na_i / kna3 * (1 + hna)
h2 = Na_i * hna / (kna3 * h1)
h3 = 1 / h1
h4 = 1 + Na_i / kna1 * (1 + Na_i / kna2)
h5 = Na_i * Na_i / (h4 * kna1 * kna2)
h6 = 1 / h4
h7 = 1 + Na_o / kna3 * (1 + 1 / hna)
h8 = Na_o / (kna3 * hna * h7)
h9 = 1 / h7
h10 = kasymm + 1 + Na_o / kna1 * (1 + Na_o / kna2)
h11 = Na_o * Na_o / (h10 * kna1 * kna2)
h12 = 1 / h10
# Parameters k
k1 = h12 * Ca_o * kcaon * 1 [1/M/mM]
    in [Hz]
k2 = kcaoff * 1 [1/M]
    in [Hz]
k3p = h9 * wca
    in [Hz]
k3pp = h8 * wnaca
    in [Hz]
k3 = k3p + k3pp
    in [Hz]
k4p = h3 * wca / hca
    in [Hz]
k4pp = h2 * wnaca
    in [Hz]
k4 = k4p + k4pp
    in [Hz]
k5 = kcaoff * 1 [1/M]
    in [Hz]
k6 = h6 * Ca_i * kcaon * 1 [1/M/mM]
    in [Hz]
k7 = h5 * h2 * wna
    in [Hz]
k8 = h8 * h11 * wna
    in [Hz]
x1 = k2 * k4 * (k7 + k6) + k5 * k7 * (k2 + k3)
    in [Hz^3]
x2 = k1 * k7 * (k4 + k5) + k4 * k6 * (k1 + k8)
    in [Hz^3]
x3 = k1 * k3 * (k7 + k6) + k8 * k6 * (k2 + k3)
    in [Hz^3]
x4 = k2 * k8 * (k4 + k5) + k3 * k5 * (k1 + k8)
    in [Hz^3]
E1 = x1 / (x1 + x2 + x3 + x4)
E2 = x2 / (x1 + x2 + x3 + x4)
E3 = x3 / (x1 + x2 + x3 + x4)
E4 = x4 / (x1 + x2 + x3 + x4)
KmCaAct = 150e-6 [mM]
    in [mM]
allo = 1 / (1 + (KmCaAct / Ca_i)^2)
JncxNa = 3 * (E4 * k7 - E1 * k8) + E3 * k4pp - E2 * k3pp
    in [1/s]
JncxCa = E2 * k2 - E1 * k1
    in [1/s]
Gncx = 0.0008 [C/F]
    in [C/F]
fNaCa = piecewise(cell.mode == 0, 1, cell.mode == 1, 1.1, 1.4)
INaCa = 0.8 * fNaCa * Gncx * allo * (JncxNa + 2 * JncxCa)
    in [A/F]
    desc: Sodium/Calcium exchange current
INaCa_total = INaCa + inacass.INaCa_ss
    in [A/F]

#
# INaCa_ss: Sodium/calcium exchanger current into the L-type subspace
# Page 12 of the appendix to [2]
#
[inacass]
V = if(setting.simType==0, membrane.V, membrane.VC)
use extra.Na_o, extra.Ca_o
use sodium.Na_ss, calcium.Ca_ss
use inaca.kna1, inaca.kna2, inaca.kna3, inaca.hna
# Parameters h
h1 = 1 + Na_ss / kna3 * (1 + hna)
h2 = Na_ss * hna / (kna3 * h1)
h3 = 1 / h1
h4 = 1 + Na_ss / kna1 * (1 + Na_ss / kna2)
h5 = Na_ss * Na_ss / (h4 * kna1 * kna2)
h6 = 1 / h4
h7 = 1 + Na_o / kna3 * (1 + 1 / hna)
h8 = Na_o / (kna3 * hna * h7)
h9 = 1 / h7
h10 = inaca.kasymm + 1 + Na_o / kna1 * (1 + Na_o / kna2)
h11 = Na_o * Na_o / (h10 * kna1 * kna2)
h12 = 1 / h10
# Parameters K
k1 = h12 * Ca_o * inaca.kcaon * 1 [1/M/mM]
    in [Hz]
k2 = inaca.kcaoff * 1 [1/M]
    in [Hz]
k3p = h9 * inaca.wca
    in [Hz]
k3pp = h8 * inaca.wnaca
    in [Hz]
k3 = k3p + k3pp
    in [Hz]
k4p = h3 * inaca.wca / inaca.hca
    in [Hz]
k4pp = h2 * inaca.wnaca
    in [Hz]
k4 = k4p + k4pp
    in [Hz]
k5 = inaca.kcaoff * 1 [1/M]
    in [Hz]
k6 = h6 * Ca_ss * inaca.kcaon * 1 [1/M/mM]
    in [Hz]
k7 = h5 * h2 * inaca.wna
    in [Hz]
k8 = h8 * h11 * inaca.wna
    in [Hz]
x1 = k2 * k4 * (k7 + k6) + k5 * k7 * (k2 + k3)
    in [Hz^3]
x2 = k1 * k7 * (k4 + k5) + k4 * k6 * (k1 + k8)
    in [Hz^3]
x3 = k1 * k3 * (k7 + k6) + k8 * k6 * (k2 + k3)
    in [Hz^3]
x4 = k2 * k8 * (k4 + k5) + k3 * k5 * (k1 + k8)
    in [Hz^3]
E1 = x1 / (x1 + x2 + x3 + x4)
E2 = x2 / (x1 + x2 + x3 + x4)
E3 = x3 / (x1 + x2 + x3 + x4)
E4 = x4 / (x1 + x2 + x3 + x4)
allo = 1 / (1 + (inaca.KmCaAct / Ca_ss)^2)
JncxNa = 3 * (E4 * k7 - E1 * k8) + E3 * k4pp - E2 * k3pp
    in [1/s]
JncxCa = E2 * k2 - E1 * k1
    in [1/s]
INaCa_ss = 0.2 * inaca.fNaCa * inaca.Gncx * allo * (JncxNa + 2 * JncxCa)
    desc: Sodium/Calcium exchange current into the T-Tubule subspace
    in [A/F]

#
# INaK: Sodium/potassium ATPase current
# Based on Smith and Crampin, 2004, PBMB
# Page 14 of the appendix to [2]
#
[inak]
V = if(setting.simType==0, membrane.V, membrane.VC)
use extra.Na_o, sodium.Na_i, sodium.Na_ss
use extra.K_o, potassium.K_i, potassium.K_ss
k1p = 949.5 [1/s]
    in [1/s]
k1m = 182.4 [1/s/mM]
    in [1/s/mM]
k2p = 687.2 [1/s]
    in [1/s]
k2m = 39.4 [1/s]
    in [1/s]
k3p = 1899 [1/s]
    in [1/s]
k3m = 79300 [1/s/mM^2]
    in [1/s/mM^2]
k4p = 639 [1/s]
    in [1/s]
k4m = 40 [1/s]
    in [1/s]
Knai0 = 9.073 [mM]
    in [mM]
Knao0 = 27.78 [mM]
    in [mM]
Kki = 0.5 [mM]
    in [mM]
Kko = 0.3582 [mM]
    in [mM]
delta = -0.155
MgADP = 0.05 [mM]
    in [mM]
MgATP = 9.8 [mM]
    in [mM]
Kmgatp = 1.698e-7 [mM]
    in [mM]
H = 1e-7 [mM]
    in [mM]
eP = 4.2 [mM]
    in [mM]
Khp = 1.698e-7 [mM]
    in [mM]
Knap = 224 [mM]
    in [mM]
Kxkur = 292 [mM]
    in [mM]
P = eP / (1 + H / Khp + Na_i / Knap + K_i / Kxkur)
    in [mM]
Knai = Knai0 * exp(delta * V * phys.FRT / 3)
    in [mM]
Knao = Knao0 * exp((1 - delta) * V * phys.FRT / 3)
    in [mM]
a1 = k1p * (Na_i / Knai)^3 / ((1 + Na_i / Knai)^3 + (1 + K_i / Kki)^2 - 1)
    in [Hz]
b1 = k1m * MgADP
    in [Hz]
a2 = k2p
    in [Hz]
b2 = k2m * (Na_o / Knao)^3 / ((1 + Na_o / Knao)^3 + (1 + K_o / Kko)^2 - 1)
    in [Hz]
a3 = k3p * (K_o / Kko)^2 / ((1 + Na_o / Knao)^3 + (1 + K_o / Kko)^2 - 1)
    in [Hz]
b3 = k3m * P * H / (1 + MgATP / Kmgatp)
    in [Hz]
a4 = k4p * MgATP / Kmgatp / (1 + MgATP / Kmgatp)
    in [Hz]
b4 = k4m * (K_i / Kki)^2 / ((1 + Na_i / Knai)^3 + (1 + K_i / Kki)^2 - 1)
    in [Hz]
x1 = a4 * a1 * a2 + b2 * b4 * b3 + a2 * b4 * b3 + b3 * a1 * a2
    in [Hz^3]
x2 = b2 * b1 * b4 + a1 * a2 * a3 + a3 * b1 * b4 + a2 * a3 * b4
    in [Hz^3]
x3 = a2 * a3 * a4 + b3 * b2 * b1 + b2 * b1 * a4 + a3 * a4 * b1
    in [Hz^3]
x4 = b4 * b3 * b2 + a3 * a4 * a1 + b2 * a4 * a1 + b3 * b2 * a1
    in [Hz^3]
E1 = x1 / (x1 + x2 + x3 + x4)
E2 = x2 / (x1 + x2 + x3 + x4)
E3 = x3 / (x1 + x2 + x3 + x4)
E4 = x4 / (x1 + x2 + x3 + x4)
JnakNa = 3 * (E1 * a3 - E2 * b3)
    in [1/s]
JnakK = 2 * (E4 * b1 - E3 * a1)
    in [1/s]
PNaK = 30 [C/F]
    in [C/F]
fNaK = piecewise(cell.mode == 0, 1, cell.mode == 1, 0.9, 0.7)
INaK = fNaK * PNaK * (JnakNa + JnakK)
    desc: Sodium/Potassium ATPase current
    in [A/F]

#
# IKb: Background potassium current
# Page 15 of the appendix to [2]
#
[ikb]
V = if(setting.simType==0, membrane.V, membrane.VC)
xkb = 1 / (1 + exp((V - 14.48 [mV]) / -18.34 [mV]))
fKb = if(cell.mode == 1, 0.6, 1)
GKb = 0.003 [mS/uF]
    in [mS/uF]
IKb = fKb * GKb * xkb * (V - rev.EK)
    desc: Background Potassium current
    in [A/F]



# INab: Background sodium current
# Page 15 of the appendix to [2]
#
[inab]
V = if(setting.simType==0, membrane.V, membrane.VC)
B = phys.FRT
v0 = 0
PNab = 3.75e-10
A = PNab * phys.FFRT * (sodium.Na_i * exp(V * phys.FRT) - extra.Na_o) / B    
U = B * (V - v0)
INab = if(-1e-7<=U and U<=1e-7, A * (1.0 - 0.5*U), (A*U)/(exp(U)-1.0))
    desc: Background Sodium current
    in [uA/uF]

#
# ICab :: Background Calcium current
# Page 15
#
[icab]
V = if(setting.simType==0, membrane.V, membrane.VC)
B = 2 * phys.FRT
v0 = 0
PCab = 2.5e-8
A = PCab * 4.0 * phys.FFRT * (calcium.Ca_i * exp( 2.0 * V * phys.FRT) - 0.341 * extra.Ca_o) / B    
U = B * (V - v0)
ICab = if(-1e-7<=U and U<=1e-7, A * (1.0 - 0.5*U), (A*U)/(exp(U)-1.0))
    desc: Background Calcium current
    in [uA/uF]



#
# IpCa: Sarcolemmal calcium pump current
# Page 15 of the appendix to [2]
#
[ipca]
GpCa = 0.0005 [A/F]
    in [A/F]
IpCa = GpCa * calcium.Ca_i / (0.0005 [mM] + calcium.Ca_i)
    desc: Sarcolemmal Calcium pump current
    in [A/F]

#
# Jrel: SR Calcium release flux via ryanodine receptor
# Page 17 of the appendix to [2]
#
[ryr]
use calcium.Ca_jsr
bt = 4.75 [ms]
    in [ms]
a_rel = 0.5 * bt
    in [ms]
dot(Jrelnp) = (inf - Jrelnp) / tau
    in [mM/ms]
    tau = if(value < 0.001 [ms], 0.001 [ms], value)
        in [ms]
        value = bt / (1 + 0.0123 [mM] / Ca_jsr)
            in [ms]
    inf = base * if(cell.mode == 2, 1.7, 1)
        in [mM/ms]
    base = -1 [mM/ms/mV] * a_rel * ical.ICaL / (1 + (1.5 [mM] / Ca_jsr)^8)
        in [mM/ms]
btp = 1.25 * bt
    in [ms]
a_relp = 0.5 * btp
    in [ms]
dot(Jrelp) = (inf - Jrelp) / tau
    in [mM/ms]
    tau = if(value < 0.001 [ms], 0.001 [ms], value)
        in [ms]
        value = btp / (1 + 0.0123 [mM] / Ca_jsr)
            in [ms]
    inf = base * if(cell.mode == 2, 1.7, 1)
        in [mM/ms]
    base = -1 [mM/ms/mV] * a_relp * ical.ICaL / (1 + (1.5 [mM] / Ca_jsr)^8)
        in [mM/ms]
Jrel = (1 - camk.f) * Jrelnp + camk.f * Jrelp
    desc: SR Calcium release flux via Ryanodine receptor
    in [mM/ms]

#
# Jup: Calcium uptake via SERCA pump
# Page 17 of the appendix to [2]
#
[serca]
use calcium.Ca_i, calcium.Ca_jsr, calcium.Ca_nsr
f = if(cell.mode == 1, 1.3, 1)
Jupnp = f * 0.004375 [mM/ms] * Ca_i / (Ca_i + 0.00092 [mM])
    in [mM/ms]
Jupp = f * 2.75 * 0.004375 [mM/ms] * Ca_i / (Ca_i + 0.00092 [mM] - 0.00017 [mM])
    in [mM/ms]
Jleak = 0.0039375 [mM/ms] * Ca_nsr / 15 [mM]
    in [mM/ms]
Jup = (1 - camk.f) * Jupnp + camk.f * Jupp - Jleak
    desc: Total Ca2+ uptake, via SERCA pump, from myoplasm to nsr
    in [mM/ms]
Jtr = (Ca_nsr - Ca_jsr) / 100 [ms]
    desc: Ca2+ translocation from nsr to jsr
    in [mM/ms]

#
# Diffusion fluxes
# Page 16 of the appendix to [2]
#
[diff]
JdiffNa = (sodium.Na_ss - sodium.Na_i) / 2 [ms]
    in [mM/ms]
JdiffK = (potassium.K_ss - potassium.K_i) / 2 [ms]
    in [mM/ms]
Jdiff = (calcium.Ca_ss - calcium.Ca_i) / 0.2 [ms]
    in [mM/ms]

#
# Intracellular sodium concentrations
# Page 18 of the appendix to [2]
#
[sodium]
use cell.AFC, cell.vss, cell.vmyo
INa_tot = ina.INa + inal.INaL + inab.INab + 3 * inaca.INaCa + 3 * inak.INaK
    in [A/F]
#dot(Na_i) = -INa_tot * AFC / vmyo + diff.JdiffNa * vss / vmyo
dot(Na_i) = if(setting.simType==0, -INa_tot * AFC / vmyo + diff.JdiffNa * vss / vmyo, 0)
    desc: Intracellular Potassium concentration
    in [mM]
INa_ss_tot = ical.ICaNa + 3 * inacass.INaCa_ss
    in [A/F]
#dot(Na_ss) = -INa_ss_tot * AFC / vss - diff.JdiffNa
dot(Na_ss) = if(setting.simType==0, -INa_ss_tot * AFC / vss - diff.JdiffNa, 0)
    in [mM]

#
# Intracellular potassium concentrations
# Page 18 of the appendix to [2]
#
[potassium]
use cell.AFC, cell.vss, cell.vmyo
IK_tot = (
    + ito.Ito
    + ikr.IKr
    + iks.IKs
    + ik1.IK1
    + ikb.IKb
    - 2 * inak.INaK
)
    in [A/F]
IK_ss_tot = ical.ICaK
    in [A/F]
#dot(K_i) = -(IK_tot + stimulus.i_stim) * AFC / vmyo + diff.JdiffK * vss / vmyo
dot(K_i) = if(setting.simType==0, -(IK_tot + stimulus.i_stim) * AFC / vmyo + diff.JdiffK * vss / vmyo, 0)
    desc: Intracellular Potassium concentration
    in [mM]
#dot(K_ss) = -IK_ss_tot * AFC / vss - diff.JdiffK
dot(K_ss) = if(setting.simType==0, -IK_ss_tot * AFC / vss - diff.JdiffK, 0)
    desc: Potassium concentration in the T-Tubule subspace
    in [mM]

#
# Intracellular calcium concentrations and buffers
# Page 18 of the appendix to [2]
#
[calcium]
use cell.AFC, cell.vmyo, cell.vnsr, cell.vjsr, cell.vss
cmdnmax = base * if(cell.mode == 1, 1.3, 1)
    in [mM]
    base = 0.05 [mM]
        in [mM]
trpnmax = 0.07 [mM]
    in [mM]
BSRmax = 0.047 [mM]
    in [mM]
BSLmax = 1.124 [mM]
    in [mM]
csqnmax = 10 [mM]
    in [mM]
kmcmdn = 0.00238 [mM]
    in [mM]
kmtrpn = 0.0005 [mM]
    in [mM]
KmBSR = 0.00087 [mM]
    in [mM]
KmBSL = 0.0087 [mM]
    in [mM]
kmcsqn = 0.8 [mM]
    in [mM]
ICa_tot = ipca.IpCa + icab.ICab - 2 * inaca.INaCa
    in [A/F]
#dot(Ca_i) = buff * (-ICa_tot * AFC / (2 * vmyo) - serca.Jup * vnsr / vmyo + diff.Jdiff * vss / vmyo)
dot(Ca_i) = if(setting.simType==0, buff * (-ICa_tot * AFC / (2 * vmyo) - serca.Jup * vnsr / vmyo + diff.Jdiff * vss / vmyo), 0)
    in [mM]
    desc: Intracellular Calcium concentratium
    buff = 1 / (1 + cmdnmax * kmcmdn / (kmcmdn + Ca_i)^2 + trpnmax * kmtrpn / (kmtrpn + Ca_i)^2)
ICa_ss_tot = ical.ICaL - 2 * inacass.INaCa_ss
    in [A/F]
#dot(Ca_ss) = buff * (-ICa_ss_tot * AFC / (2 * vss) + ryr.Jrel * vjsr / vss - diff.Jdiff)
dot(Ca_ss) = if(setting.simType==0, buff * (-ICa_ss_tot * AFC / (2 * vss) + ryr.Jrel * vjsr / vss - diff.Jdiff), 0)
    in [mM]
    desc: Calcium concentratium in the T-Tubule subspace
    buff = 1 / (1 + BSRmax * KmBSR / (KmBSR + Ca_ss)^2 + BSLmax * KmBSL / (KmBSL + Ca_ss)^2)
#dot(Ca_jsr) = buff * (serca.Jtr - ryr.Jrel)
dot(Ca_jsr) = if(setting.simType==0, buff * (serca.Jtr - ryr.Jrel), 0)
    in [mM]
    desc: Calcium concentration in the JSR subspace
    buff = 1 / (1 + csqnmax * kmcsqn / (kmcsqn + Ca_jsr)^2)
#dot(Ca_nsr) = serca.Jup - serca.Jtr * vjsr / vnsr
dot(Ca_nsr) = if(setting.simType==0, serca.Jup - serca.Jtr * vjsr / vnsr, 0)
    in [mM]
    desc: Calcium concentration in the NSR subspace

#
# Active CaMKII subunits.
# Equations given on page 16 of the supplement to [2].
# Described in more detail in Hund et al. 2004.
#
[camk]
KmCaMK = 0.15
aCaMK = 0.05 [1/ms]
    in [1/ms]
bCaMK = 0.00068 [1/ms]
    in [1/ms]
CaMKo = 0.05
KmCaM = 0.0015 [mM]
    in [mM]
CaMK_bound = CaMKo * (1 - CaMK_trapped) / (1 + KmCaM / calcium.Ca_ss)
    desc: Fraction of calmodulin-bound (and therefore) active subunits
CaMK_active = CaMK_bound + CaMK_trapped
    desc: Total fraction of active subunits
dot(CaMK_trapped) = aCaMK * CaMK_bound * CaMK_active - bCaMK * CaMK_trapped
    desc: Fraction of subunits "trapped" in an active state
f = 1 / (1 + KmCaMK / CaMK_active)
    desc: Fraction of phosphorylated subunits

[[protocol]]
# Level  Start    Length   Period   Multiplier
1        50       0.5      1000     0

[[script]]
import matplotlib.pyplot as plt
import myokit

# Get the model and protocol, create a simulation
m = get_model()
p = get_protocol()
s = myokit.Simulation(m, p)

# Create an empty figure
plt.figure()
plt.xlabel('Time (ms)')
plt.ylabel('Membrane potential (mV)')

# Select variables for logging
variables = [
    'engine.time',
    'membrane.V',
]

# Run a simulation in every mode
modes = {
    'Endocardial' : 0,
    'Epicardial' : 1,
    'Mid-myocardial' : 2,
}
for name, mode in modes.items():

    # Change mode in simulation
    s.set_constant('cell.mode', mode)

    # Pre-pace for a few beats
    s.pre(50 * 1000)

    # Run a logged simulation
    d = s.run(500, log=variables)

    # Display the simulated membrane potential
    plt.plot(d['engine.time'], d['membrane.V'], label=name)

    # Reset the simulation
    s.reset()

plt.legend(loc='upper right')
plt.show()

